PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = -1.0000, -1.0000, -1.0000
  expName = SC-IAT
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine Intro
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    TextComponent IntroText
      font = NanumGothic
      letterHeight = 0.04
      pos = (0, -0.1)
      startVal [time (s)] = 0
      wrapWidth = 1.7
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      text:
        Z 키에는 왼쪽 손가락을, / 키에는 오른쪽 손가락을 올려주세요.
        화면의 왼쪽 상단에는 '긍정'이, 오른쪽 상단에는 '부정'이 나타납니다.
        중간에 나오는 단어는 다음 세 가지 범주 중 하나에 속할 수 있습니다.

        (1) 긍정적인 단어
        (2) 부정적인 단어
        (3) 마약 사진

        긍정적인 단어/마약 사진이 나오면 Z 키를 누르고, 부정적인 단어가 나오면 / 키를 눌러주세요.

        단어 또는 사진은 한 번에 하나씩 나타나며, 잘못 분류하면 X가 나타납니다.
        정확하게, 가능한 한 빨리 눌러주세요. 준비가 되었다면, 스페이스바를 눌러 시작하세요.
    TextComponent Positive_1_1
      color = lightgreen
      font = NanumGothic
      letterHeight = 0.06
      pos = (-0.55, 0.35)
      startVal [time (s)] = 0.0
      text = 긍정
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    TextComponent Negative_1_1
      color = lightgreen
      font = NanumGothic
      letterHeight = 0.06
      pos = (0.55, 0.35)
      startVal [time (s)] = 0.0
      text = 부정
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    KeyboardComponent key_resp_intro
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_1
      Code Type = Auto->JS
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      Begin Experiment:
        import random

        # 자극 리스트
        # 이미지 파일 정의
        positive_images = [
            "기쁘다.jpg", "만족하다.jpg", "흐뭇하다.jpg", "영광스럽다.jpg", "평온하다.jpg",
            "뿌듯하다.jpg", "사랑스럽다.jpg", "반갑다.jpg", "평화롭다.jpg", "상쾌하다.jpg",
            "신나다.jpg", "애정하다.jpg", "유쾌하다.jpg", "재미있다.jpg", "편안하다.jpg",
            "행복하다.jpg", "즐겁다.jpg", "환희하다.jpg", "흥겹다.jpg", "흥미롭다.jpg", "자랑스럽다.jpg"
        ]

        negative_images = [
            "거북하다.jpg", "격분하다.jpg", "경멸하다.jpg", "끔찍하다.jpg", "괴롭다.jpg",
            "분노하다.jpg", "불만족하다.jpg", "불쾌하다.jpg", "불행하다.jpg", "비참하다.jpg",
            "섬뜩하다.jpg", "슬프다.jpg", "암담하다.jpg", "역겹다.jpg", "화나다.jpg",
            "실망하다.jpg", "억울하다.jpg", "좌절하다.jpg", "참담하다.jpg", "증오하다.jpg", "질색하다.jpg"
        ]

        drug_images = ["drug1.jpg", "drug2.jpg", "drug3.jpg", "drug4.jpg", "drug5.jpg", "drug6.jpg", "drug7.jpg"]


        # trial 설정
        total_trials = 24
        z_ratio = 0.58
        z_count = round(total_trials * z_ratio)   # 14
        slash_count = total_trials - z_count      # 10
        positive_z = 7
        drug_z = z_count - positive_z  # 7

        # 비복원추출 함수
        def strict_sample(images, n):
            if len(images) < n:
                raise ValueError(f"자극이 부족합니다: {len(images)}개 중 {n}개를 요청했습니다.")
            return random.sample(images, n)

        # 샘플링
        positive_sample = strict_sample(positive_images, positive_z)
        drug_sample = strict_sample(drug_images, drug_z)
        negative_sample = strict_sample(negative_images, slash_count)

        # 자극 풀 구성
        stimuli_pool = (
            [(img, '긍정', 'z') for img in positive_sample] +
            [(img, '마약', 'z') for img in drug_sample] +
            [(img, '부정', '/') for img in negative_sample]
        )

        # 무작위 섞기 (중복 방지)
        def is_valid_sequence(seq):
            for i in range(1, len(seq)):
                if seq[i][0] == seq[i-1][0]:
                    return False
            return True

        for _ in range(1000):
            random.shuffle(stimuli_pool)
            if is_valid_sequence(stimuli_pool):
                break
        else:
            raise RuntimeError("유효한 자극 배열을 생성하지 못했습니다. 이미지 수를 늘려보세요.")
      Begin Routine:
        message = ''
        fb_color = 'white'
        fb_duration = 0.0
        fb_size = 0.06
  Routine trial_1
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    ImageComponent image_stim_1
      size = (0.5, 0.5)
      startVal [time (s)] = 0.05
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    TextComponent Drug_1
      font = NanumGothic
      letterHeight = 0.06
      pos = (-0.55, 0.25)
      startVal [time (s)] = 0.0
      text = 마약
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    TextComponent Positive_1_2
      color = lightgreen
      font = NanumGothic
      letterHeight = 0.06
      pos = (-0.55, 0.35)
      startVal [time (s)] = 0.0
      text = 긍정
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    TextComponent Negative_1_2
      color = lightgreen
      font = NanumGothic
      letterHeight = 0.06
      pos = (0.55, 0.35)
      startVal [time (s)] = 0.0
      text = 부정
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    KeyboardComponent key_resp_1
      allowedKeys [set every repeat] = 'z','slash'
      correctAns = $Corr
      forceEndRoutine = True
      startVal [time (s)] = 0.1
      storeCorrect = True
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    CodeComponent code_2
      Code Type = Py
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      Begin Experiment:
        from collections import Counter
        key_counts = Counter([stim[2] for stim in stimuli_pool])
        print(f"✅ trial_1 시작 - stimuli_pool 상태: z: {key_counts['z']}, /: {key_counts['/']}")
      Begin Routine:
        # 반드시 맨 위에 global 선언
        global stim_index_1

        # 루프의 첫 번째 trial일 때 stim_index 초기화
        if trials.thisN == 0:
            stim_index_1 = 0

        # 자극 끝났으면 루틴 종료
        if stim_index_1 >= len(stimuli_pool):
            continueRoutine = False
        else:
            stim_row = stimuli_pool[stim_index_1]
            stimulus_file = stim_row[0]  # 자극 파일명
            stim_category = stim_row[1]  # 자극 범주
            stim_index_1 += 1
            image_stim_1.setImage('images/' + stimulus_file)

        # 자극 수 제한 (혹시 모를 예외를 위해 이건 아래에 두는 게 안정적)
        if trials.thisN >= 24:
            continueRoutine = False
      End Routine:
        # 키 표준화 (슬래시 키 대응)
        if key_resp_1.keys == 'slash':
            key_resp_1.keys = '/'

        # 정답 키 설정
        if stim_category == '부정':
            correct_key = '/'
        else:
            correct_key = 'z'

        # 채점 처리
        if key_resp_1.keys == correct_key:
            key_resp_1.corr = 1
        else:
            key_resp_1.corr = 0

        if stim_index_1 >= 24:
            trials.finished = True  # 루프 종료
  Routine feedback
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    CodeComponent code_3
      Code Type = Py
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      Begin Routine:
        if key_resp_1.keys:  # 반응이 있었을 경우
            if key_resp_1.rt is not None and key_resp_1.rt > 1.5:
                message = '더 빠르게 해주세요'
                fb_color = 'white'
                fb_duration = 0.5
                fb_size = 0.06  # 작게
            elif key_resp_1.corr == 1:
                message = 'O'
                fb_color = 'green'
                fb_duration = 0.15
                fb_size = 0.1  # 크게
            elif key_resp_1.corr == 0:
                message = 'X'
                fb_color = 'red'
                fb_duration = 0.15
                fb_size = 0.1  # 크게

        else:  # 반응이 없었을 때
            message = '더 빠르게 해주세요'
            fb_color = 'white'
            fb_duration = 0.5
            fb_size = 0.06  # 작게
    TextComponent msg_feedback_1
      color [set every repeat] = $fb_color
      font = Nanumgothic
      letterHeight [set every repeat] = fb_size
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = $fb_duration
      text [set every repeat] = $message
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  Routine Intro_2
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    TextComponent Positive_2_1
      color = lightgreen
      font = NanumGothic
      letterHeight = 0.06
      pos = (-0.55, 0.35)
      startVal [time (s)] = 0.0
      text = 긍정
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    TextComponent Negative_2_1
      color = lightgreen
      font = NanumGothic
      letterHeight = 0.06
      pos = (0.55, 0.35)
      startVal [time (s)] = 0.0
      text = 부정
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    KeyboardComponent key_resp_intro_2
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Py
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      Begin Routine:
        message = ''
        fb_color = 'white'
        fb_duration = 0.0
        fb_size = 0.06
    TextComponent IntroText_2
      font = NanumGothic
      letterHeight = 0.04
      pos = (0, -0.1)
      startVal [time (s)] = 0
      wrapWidth = 1.7
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      text:
        Z 키에는 왼쪽 손가락을, / 키에는 오른쪽 손가락을 올려주세요.
        화면의 왼쪽 상단에는 '긍정'이, 오른쪽 상단에는 '부정'이 나타납니다.
        중간에 나오는 단어는 다음 세 가지 범주 중 하나에 속할 수 있습니다.

        (1) 긍정적인 단어
        (2) 부정적인 단어
        (3) 마약 사진

        긍정적인 단어/마약 사진이 나오면 Z 키를 누르고, 부정적인 단어가 나오면 / 키를 눌러주세요.

        단어 또는 사진은 한 번에 하나씩 나타나며, 잘못 분류하면 X가 나타납니다.
        정확하게, 가능한 한 빨리 눌러주세요. 준비가 되었다면, 스페이스바를 눌러 시작하세요.
  Routine trial_2
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    ImageComponent image_stim_2
      size = (0.5, 0.5)
      startVal [time (s)] = 0.05
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    TextComponent Drug_2
      font = NanumGothic
      letterHeight = 0.06
      pos = (-0.55, 0.25)
      startVal [time (s)] = 0.0
      text = 마약
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    TextComponent Positive_2_2
      color = lightgreen
      font = NanumGothic
      letterHeight = 0.06
      pos = (-0.55, 0.35)
      startVal [time (s)] = 0.0
      text = 긍정
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    TextComponent Negative_2_2
      color = lightgreen
      font = NanumGothic
      letterHeight = 0.06
      pos = (0.55, 0.35)
      startVal [time (s)] = 0.0
      text = 부정
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    KeyboardComponent key_resp_2
      allowedKeys [set every repeat] = 'z','slash'
      correctAns = $Corr
      forceEndRoutine = True
      startVal [time (s)] = 0.1
      storeCorrect = True
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    CodeComponent code_6
      Code Type = Py
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      Begin Routine:
        if trials_2.thisN == 0:
            global stim_index_2
            stim_index_2 = 0

        if stim_index_2 >= len(stimuli_pool):
            continueRoutine = False
        else:
            stim_row = stimuli_pool[stim_index_2]
            stimulus_file = stim_row[0]       # 파일명
            stim_category = stim_row[1]       # 카테고리
            stim_index_2 += 1
            image_stim_2.setImage('images/' + stimulus_file)

        if filename == '' or filename is None:
            continueRoutine = False
      End Routine:
        # 키 추출 및 표준화
        keys = key_resp_2.keys
        if isinstance(keys, list):
            keys = keys[0] if keys else None

        # 키 표준화 (슬래시 키 대응)
        if key_resp_2.keys == 'slash':
            key_resp_2.keys = '/'

        # 정답 키 설정
        if stim_category == '부정':
            correct_key = '/'
        else:
            correct_key = 'z'

        # 채점 처리
        if key_resp_2.keys == correct_key:
            key_resp_2.corr = 1
        else:
            key_resp_2.corr = 0

        if stim_index_2 >= 24:
            trials.finished = True  # 루프 종료
  Routine feedback_2
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        if trials_2.thisTrial is None:
            continueRoutine = False

        if key_resp_2.keys:  # 반응이 있었을 경우
            if key_resp_2.rt is not None and key_resp_2.rt > 1.5:
                message = '더 빠르게 해주세요'
                fb_color = 'white'
                fb_duration = 0.5
                fb_size = 0.06  # 작게
            elif key_resp_2.corr == 1:
                message = 'O'
                fb_color = 'green'
                fb_duration = 0.15
                fb_size = 0.1  # 크게
            elif key_resp_2.corr == 0:
                message = 'X'
                fb_color = 'red'
                fb_duration = 0.15
                fb_size = 0.1  # 크게

        else:  # 반응이 없었을 때
            message = '더 빠르게 해주세요'
            fb_color = 'white'
            fb_duration = 0.5
            fb_size = 0.06  # 작게
    TextComponent msg_feedback_2
      color [set every repeat] = $fb_color
      font = Nanumgothic
      letterHeight [set every repeat] = fb_size
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = $fb_duration
      text [set every repeat] = $message
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  Routine main_loop_
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        import pandas as pd

        # 전체 자극 목록 불러오기
        df = pd.read_excel('stimuli.xlsx')

        # 24개 자극 비복원추출
        subset_df_1 = df.sample(n=24, replace=False).reset_index(drop=True)

        # 반복마다 다른 파일 이름으로 저장 (필수는 아님)
        subset_df_1.to_csv('temp_conditions.csv', index=False)
  Routine Intro_3
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    TextComponent IntroText_3
      font = NanumGothic
      letterHeight = 0.04
      pos = (0, -0.1)
      startVal [time (s)] = 0
      wrapWidth = 1.7
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      text:
        Z 키에는 왼쪽 손가락을, / 키에는 오른쪽 손가락을 올려주세요.
        화면의 왼쪽 상단에는 '긍정'이, 오른쪽 상단에는 '부정'이 나타납니다.
        중간에 나오는 단어는 다음 세 가지 범주 중 하나에 속할 수 있습니다.

        (1) 긍정적인 단어
        (2) 부정적인 단어
        (3) 마약 사진

        긍정적인 단어 사진이 나오면 Z 키를 누르고, 부정적인 단어/마약 사진이 나오면 / 키를 눌러주세요.

        단어 또는 사진은 한 번에 하나씩 나타나며, 잘못 분류하면 X가 나타납니다.
        정확하게, 가능한 한 빨리 눌러주세요. 준비가 되었다면, 스페이스바를 눌러 시작하세요.
    TextComponent Positive_3_1
      color = lightgreen
      font = NanumGothic
      letterHeight = 0.06
      pos = (-0.55, 0.35)
      startVal [time (s)] = 0.0
      text = 긍정
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    TextComponent Negative_3_1
      color = lightgreen
      font = NanumGothic
      letterHeight = 0.06
      pos = (0.55, 0.35)
      startVal [time (s)] = 0.0
      text = 부정
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    KeyboardComponent key_resp_intro_3
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_8
      Code Type = Py
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      Begin Experiment:
        import random

        # 자극 리스트
        # 이미지 파일 정의
        positive_images = [
            "기쁘다.jpg", "만족하다.jpg", "흐뭇하다.jpg", "영광스럽다.jpg", "평온하다.jpg",
            "뿌듯하다.jpg", "사랑스럽다.jpg", "반갑다.jpg", "평화롭다.jpg", "상쾌하다.jpg",
            "신나다.jpg", "애정하다.jpg", "유쾌하다.jpg", "재미있다.jpg", "편안하다.jpg",
            "행복하다.jpg", "즐겁다.jpg", "환희하다.jpg", "흥겹다.jpg", "흥미롭다.jpg", "자랑스럽다.jpg"
        ]

        negative_images = [
            "거북하다.jpg", "격분하다.jpg", "경멸하다.jpg", "끔찍하다.jpg", "괴롭다.jpg",
            "분노하다.jpg", "불만족하다.jpg", "불쾌하다.jpg", "불행하다.jpg", "비참하다.jpg",
            "섬뜩하다.jpg", "슬프다.jpg", "암담하다.jpg", "역겹다.jpg", "화나다.jpg",
            "실망하다.jpg", "억울하다.jpg", "좌절하다.jpg", "참담하다.jpg", "증오하다.jpg", "질색하다.jpg"
        ]

        drug_images = ["drug1.jpg", "drug2.jpg", "drug3.jpg", "drug4.jpg", "drug5.jpg", "drug6.jpg", "drug7.jpg"]


        # trial 설정
        total_trials = 24
        z_ratio = 0.42
        z_count = round(total_trials * z_ratio)
        slash_count = total_trials - z_count
        positive_z = 10
        negative_slash = 7
        drug_slash = slash_count - negative_slash  # 7

        # 비복원추출 함수
        def strict_sample(images, n):
            if len(images) < n:
                raise ValueError(f"자극이 부족합니다: {len(images)}개 중 {n}개를 요청했습니다.")
            return random.sample(images, n)

        # 샘플링
        positive_sample = strict_sample(positive_images, positive_z)
        drug_sample = strict_sample(drug_images, drug_slash)
        negative_sample = strict_sample(negative_images, negative_slash)

        # 자극 풀 구성
        stimuli_pool_2 = (
            [(img, '긍정', 'z') for img in positive_sample] +
            [(img, '마약', '/') for img in drug_sample] +
            [(img, '부정', '/') for img in negative_sample]
        )

        # 무작위 섞기 (중복 방지)
        def is_valid_sequence(seq):
            for i in range(1, len(seq)):
                if seq[i][0] == seq[i-1][0]:
                    return False
            return True

        for _ in range(1000):
            random.shuffle(stimuli_pool_2)
            if is_valid_sequence(stimuli_pool_2):
                break
        else:
            raise RuntimeError("유효한 자극 배열을 생성하지 못했습니다. 이미지 수를 늘려보세요.")
      Begin Routine:
        message = ''
        fb_color = 'white'
        fb_duration = 0.0
        fb_size = 0.06
  Routine trial_3
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    ImageComponent image_stim_3
      size = (0.5, 0.5)
      startVal [time (s)] = 0.05
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    TextComponent Drug_3
      font = NanumGothic
      letterHeight = 0.06
      pos = (0.55, 0.25)
      startVal [time (s)] = 0.0
      text = 마약
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    TextComponent Positive_3_2
      color = lightgreen
      font = NanumGothic
      letterHeight = 0.06
      pos = (-0.55, 0.35)
      startVal [time (s)] = 0.0
      text = 긍정
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    TextComponent Negative_3_2
      color = lightgreen
      font = NanumGothic
      letterHeight = 0.06
      pos = (0.55, 0.35)
      startVal [time (s)] = 0.0
      text = 부정
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    KeyboardComponent key_resp_3
      allowedKeys [set every repeat] = 'z','slash'
      correctAns = $Corr
      forceEndRoutine = True
      startVal [time (s)] = 0.1
      storeCorrect = True
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    CodeComponent code_9
      Code Type = Py
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      Begin Routine:
        # 반드시 맨 위에 global 선언
        global stim_index_3

        # 루프의 첫 번째 trial일 때 stim_index 초기화
        if trials_3.thisN == 0:
            stim_index_3 = 0

        # 자극 끝났으면 루틴 종료
        if stim_index_3 >= len(stimuli_pool_2):
            continueRoutine = False
        else:
            stim_row = stimuli_pool_2[stim_index_3]
            stimulus_file = stim_row[0]  # 자극 파일명
            stim_category = stim_row[1]  # 자극 범주
            stim_index_3 += 1
            image_stim_3.setImage('images/' + stimulus_file)

        # 자극 수 제한 (혹시 모를 예외를 위해 이건 아래에 두는 게 안정적)
        if trials_3.thisN >= 24:
            continueRoutine = False
      End Routine:
        # 키 표준화 (슬래시 키 대응)
        if key_resp_3.keys == 'slash':
            key_resp_3.keys = '/'

        # 정답 키 설정
        if stim_category == '긍정':
            correct_key = 'z'
        else:
            correct_key = '/'

        # 채점 처리
        if key_resp_3.keys == correct_key:
            key_resp_3.corr = 1
        else:
            key_resp_3.corr = 0

        if stim_index_3 >= 24:
            trials_3.finished = True  # 루프 종료
  Routine feedback_3
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    CodeComponent code_10
      Code Type = Py
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      Begin Routine:
        if key_resp_3.keys:  # 반응이 있었을 경우
            if key_resp_3.rt is not None and key_resp_3.rt > 1.5:
                message = '더 빠르게 해주세요'
                fb_color = 'white'
                fb_duration = 0.5
                fb_size = 0.06  # 작게
            elif key_resp_3.corr == 1:
                message = 'O'
                fb_color = 'green'
                fb_duration = 0.15
                fb_size = 0.1  # 크게
            elif key_resp_3.corr == 0:
                message = 'X'
                fb_color = 'red'
                fb_duration = 0.15
                fb_size = 0.1  # 크게

        else:  # 반응이 없었을 때
            message = '더 빠르게 해주세요'
            fb_color = 'white'
            fb_duration = 0.5
            fb_size = 0.06  # 작게
    TextComponent msg_feedback
      color [set every repeat] = $fb_color
      font = Nanumgothic
      letterHeight [set every repeat] = fb_size
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = $fb_duration
      text [set every repeat] = $message
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  Routine Intro_4
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    TextComponent Positive_4_1
      color = lightgreen
      font = NanumGothic
      letterHeight = 0.06
      pos = (-0.55, 0.35)
      startVal [time (s)] = 0.0
      text = 긍정
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    TextComponent Negative_4_1
      color = lightgreen
      font = NanumGothic
      letterHeight = 0.06
      pos = (0.55, 0.35)
      startVal [time (s)] = 0.0
      text = 부정
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    KeyboardComponent key_resp_intro_4
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
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      Begin Routine:
        message = ''
        fb_color = 'white'
        fb_duration = 0.0
        fb_size = 0.06
    TextComponent IntroText_4
      font = NanumGothic
      letterHeight = 0.04
      pos = (0, -0.1)
      startVal [time (s)] = 0
      wrapWidth = 1.7
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      text:
        Z 키에는 왼쪽 손가락을, / 키에는 오른쪽 손가락을 올려주세요.
        화면의 왼쪽 상단에는 '긍정'이, 오른쪽 상단에는 '부정'이 나타납니다.
        중간에 나오는 단어는 다음 세 가지 범주 중 하나에 속할 수 있습니다.

        (1) 긍정적인 단어
        (2) 부정적인 단어
        (3) 마약 사진

        긍정적인 단어 사진이 나오면 Z 키를 누르고, 부정적인 단어/마약 사진이 나오면 / 키를 눌러주세요.

        단어 또는 사진은 한 번에 하나씩 나타나며, 잘못 분류하면 X가 나타납니다.
        정확하게, 가능한 한 빨리 눌러주세요. 준비가 되었다면, 스페이스바를 눌러 시작하세요.
  Routine main_loop_2
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    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Routine:
        import pandas as pd

        # 전체 자극 목록 불러오기
        df = pd.read_excel('stimuli.xlsx')

        # 24개 자극 비복원추출
        subset_df_2 = df.sample(n=24, replace=False).reset_index(drop=True)

        # 반복마다 다른 파일 이름으로 저장 (필수는 아님)
        subset_df_2.to_csv('temp_conditions.csv', index=False)
  Routine trial_4
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    ImageComponent image_stim_4
      size = (0.5, 0.5)
      startVal [time (s)] = 0.05
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    TextComponent Drug_4
      font = NanumGothic
      letterHeight = 0.06
      pos = (0.55, 0.25)
      startVal [time (s)] = 0.0
      text = 마약
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    TextComponent Positive_4_2
      color = lightgreen
      font = NanumGothic
      letterHeight = 0.06
      pos = (-0.55, 0.35)
      startVal [time (s)] = 0.0
      text = 긍정
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    TextComponent Negative_4_2
      color = lightgreen
      font = NanumGothic
      letterHeight = 0.06
      pos = (0.55, 0.35)
      startVal [time (s)] = 0.0
      text = 부정
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    KeyboardComponent key_resp_4
      allowedKeys [set every repeat] = 'z','slash'
      correctAns = $Corr
      forceEndRoutine = True
      startVal [time (s)] = 0.1
      storeCorrect = True
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    CodeComponent code_12
      Code Type = Py
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      Begin Routine:
        if trials_4.thisN == 0:
            global stim_index_4
            stim_index_4 = 0

        if stim_index_4 >= len(stimuli_pool_2):
            continueRoutine = False
        else:
            stim_row = stimuli_pool_2[stim_index_4]
            stimulus_file = stim_row[0]       # 파일명
            stim_category = stim_row[1]       # 카테고리
            stim_index_4 += 1
            image_stim_4.setImage('images/' + stimulus_file)

        if filename == '' or filename is None:
            continueRoutine = False
      End Routine:
        # 키 추출 및 표준화
        keys = key_resp_4.keys
        if isinstance(keys, list):
            keys = keys[0] if keys else None

        # 키 표준화 (슬래시 키 대응)
        if key_resp_4.keys == 'slash':
            key_resp_4.keys = '/'

        # 정답 키 설정
        if stim_category == '긍정':
            correct_key = 'z'
        else:
            correct_key = '/'

        # 채점 처리
        if key_resp_4.keys == correct_key:
            key_resp_4.corr = 1
        else:
            key_resp_4.corr = 0

        if stim_index_4 >= 24:
            trials.finished = True  # 루프 종료
  Routine feedback_4
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    CodeComponent code_13
      Code Type = Auto->JS
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      Begin Routine:
        if trials_4.thisTrial is None:
            continueRoutine = False

        if key_resp_4.keys:  # 반응이 있었을 경우
            if key_resp_4.rt is not None and key_resp_4.rt > 1.5:
                message = '더 빠르게 해주세요'
                fb_color = 'white'
                fb_duration = 0.5
                fb_size = 0.06  # 작게
            elif key_resp_4.corr == 1:
                message = 'O'
                fb_color = 'green'
                fb_duration = 0.15
                fb_size = 0.1  # 크게
            elif key_resp_4.corr == 0:
                message = 'X'
                fb_color = 'red'
                fb_duration = 0.15
                fb_size = 0.1  # 크게

        else:  # 반응이 없었을 때
            message = '더 빠르게 해주세요'
            fb_color = 'white'
            fb_duration = 0.5
            fb_size = 0.06  # 작게
    TextComponent msg_feedback_3
      color [set every repeat] = $fb_color
      font = Nanumgothic
      letterHeight [set every repeat] = fb_size
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = $fb_duration
      text [set every repeat] = $message
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  Routine End
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    TextComponent text
      font = NanumGothic
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        수고하셨습니다!
        참여해주셔서 감사합니다.
    KeyboardComponent End_
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Intro
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stimuli.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'stimulus': '기쁘다.jpg', 'category': '긍정', 'stim_type': 'image', 'Corr': 'z'},
      {'stimulus': '만족하다.jpg', 'category': '긍정', 'stim_type': 'image', 'Corr': 'z'},
      {'stimulus': '흐뭇하다.jpg', 'category': '긍정', 'stim_type': 'image', 'Corr': 'z'},
      {'stimulus': '영광스럽다.jpg', 'category': '긍정', 'stim_type': 'image', 'Corr': 'z'},
      {'stimulus': '평온하다.jpg', 'category': '긍정', 'stim_type': 'image', 'Corr': 'z'},
      {'stimulus': '뿌듯하다.jpg', 'category': '긍정', 'stim_type': 'image', 'Corr': 'z'},
      {'stimulus': '사랑스럽다.jpg', 'category': '긍정', 'stim_type': 'image', 'Corr': 'z'},
      {'stimulus': '반갑다.jpg', 'category': '긍정', 'stim_type': 'image', 'Corr': 'z'},
      {'stimulus': '평화롭다.jpg', 'category': '긍정', 'stim_type': 'image', 'Corr': 'z'},
      {'stimulus': '상쾌하다.jpg ', 'category': '긍정', 'stim_type': 'image', 'Corr': 'z'},
      {'stimulus': '신나다.jpg', 'category': '긍정', 'stim_type': 'image', 'Corr': 'z'},
      {'stimulus': '애정하다.jpg', 'category': '긍정', 'stim_type': 'image', 'Corr': 'z'},
      {'stimulus': '유쾌하다.jpg', 'category': '긍정', 'stim_type': 'image', 'Corr': 'z'},
      {'stimulus': '재미있다.jpg', 'category': '긍정', 'stim_type': 'image', 'Corr': 'z'},
      {'stimulus': '편안하다.jpg', 'category': '긍정', 'stim_type': 'image', 'Corr': 'z'},
      {'stimulus': '행복하다.jpg', 'category': '긍정', 'stim_type': 'image', 'Corr': 'z'},
      {'stimulus': '즐겁다.jpg', 'category': '긍정', 'stim_type': 'image', 'Corr': 'z'},
      {'stimulus': '환희하다.jpg', 'category': '긍정', 'stim_type': 'image', 'Corr': 'z'},
      {'stimulus': '흥겹다.jpg', 'category': '긍정', 'stim_type': 'image', 'Corr': 'z'}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
    Routine trial_1
    Routine feedback
  LoopTerminator trials
  Routine Intro_2
  LoopInitiator main_loop loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine main_loop_
    LoopInitiator trials_2 loopType="TrialHandler"
      conditionsFile = temp_conditions.csv
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('stimulus', '상쾌하다.jpg '), ('category', '긍정'), ('stim_type', 'image'), ('Corr', 'z')]),
        OrderedDict([('stimulus', '반갑다.jpg'), ('category', '긍정'), ('stim_type', 'image'), ('Corr', 'z')]),
        OrderedDict([('stimulus', '불만족하다.jpg'), ('category', '부정'), ('stim_type', 'image'), ('Corr', 'slash')]),
        OrderedDict([('stimulus', '증오하다.jpg'), ('category', '부정'), ('stim_type', 'image'), ('Corr', 'slash')]),
        OrderedDict([('stimulus', '거북하다.jpg'), ('category', '부정'), ('stim_type', 'image'), ('Corr', 'slash')]),
        OrderedDict([('stimulus', '신나다.jpg'), ('category', '긍정'), ('stim_type', 'image'), ('Corr', 'z')]),
        OrderedDict([('stimulus', 'drug5.jpg'), ('category', '마약'), ('stim_type', 'image'), ('Corr', 'z')]),
        OrderedDict([('stimulus', '편안하다.jpg'), ('category', '긍정'), ('stim_type', 'image'), ('Corr', 'z')]),
        OrderedDict([('stimulus', '경멸하다.jpg'), ('category', '부정'), ('stim_type', 'image'), ('Corr', 'slash')]),
        OrderedDict([('stimulus', '격분하다.jpg'), ('category', '부정'), ('stim_type', 'image'), ('Corr', 'slash')]),
        OrderedDict([('stimulus', '사랑스럽다.jpg'), ('category', '긍정'), ('stim_type', 'image'), ('Corr', 'z')]),
        OrderedDict([('stimulus', '즐겁다.jpg'), ('category', '긍정'), ('stim_type', 'image'), ('Corr', 'z')]),
        OrderedDict([('stimulus', '역겹다.jpg'), ('category', '부정'), ('stim_type', 'image'), ('Corr', 'slash')]),
        OrderedDict([('stimulus', 'drug1.jpg'), ('category', '마약'), ('stim_type', 'image'), ('Corr', 'z')]),
        OrderedDict([('stimulus', 'drug2.jpg'), ('category', '마약'), ('stim_type', 'image'), ('Corr', 'z')])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
      Routine trial_2
      Routine feedback_2
    LoopTerminator trials_2
  LoopTerminator main_loop
  Routine Intro_3
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = stimuli.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stimulus': '기쁘다.jpg', 'category': '긍정', 'stim_type': 'image', 'Corr': 'z'},
      {'stimulus': '만족하다.jpg', 'category': '긍정', 'stim_type': 'image', 'Corr': 'z'},
      {'stimulus': '흐뭇하다.jpg', 'category': '긍정', 'stim_type': 'image', 'Corr': 'z'},
      {'stimulus': '영광스럽다.jpg', 'category': '긍정', 'stim_type': 'image', 'Corr': 'z'},
      {'stimulus': '평온하다.jpg', 'category': '긍정', 'stim_type': 'image', 'Corr': 'z'},
      {'stimulus': '뿌듯하다.jpg', 'category': '긍정', 'stim_type': 'image', 'Corr': 'z'},
      {'stimulus': '사랑스럽다.jpg', 'category': '긍정', 'stim_type': 'image', 'Corr': 'z'},
      {'stimulus': '반갑다.jpg', 'category': '긍정', 'stim_type': 'image', 'Corr': 'z'},
      {'stimulus': '평화롭다.jpg', 'category': '긍정', 'stim_type': 'image', 'Corr': 'z'},
      {'stimulus': '상쾌하다.jpg ', 'category': '긍정', 'stim_type': 'image', 'Corr': 'z'},
      {'stimulus': '신나다.jpg', 'category': '긍정', 'stim_type': 'image', 'Corr': 'z'},
      {'stimulus': '애정하다.jpg', 'category': '긍정', 'stim_type': 'image', 'Corr': 'z'},
      {'stimulus': '유쾌하다.jpg', 'category': '긍정', 'stim_type': 'image', 'Corr': 'z'},
      {'stimulus': '재미있다.jpg', 'category': '긍정', 'stim_type': 'image', 'Corr': 'z'},
      {'stimulus': '편안하다.jpg', 'category': '긍정', 'stim_type': 'image', 'Corr': 'z'},
      {'stimulus': '행복하다.jpg', 'category': '긍정', 'stim_type': 'image', 'Corr': 'z'},
      {'stimulus': '즐겁다.jpg', 'category': '긍정', 'stim_type': 'image', 'Corr': 'z'},
      {'stimulus': '환희하다.jpg', 'category': '긍정', 'stim_type': 'image', 'Corr': 'z'},
      {'stimulus': '흥겹다.jpg', 'category': '긍정', 'stim_type': 'image', 'Corr': 'z'}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
    Routine trial_3
    Routine feedback_3
  LoopTerminator trials_3
  Routine Intro_4
  LoopInitiator trials_5 loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine main_loop_2
    LoopInitiator trials_4 loopType="TrialHandler"
      conditionsFile = temp_conditions.csv
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine trial_4
      Routine feedback_4
    LoopTerminator trials_4
  LoopTerminator trials_5
  Routine End
